PsychoPy2experiment version="2021.1.2"
Settings
  Completed URL = https://app.prolific.co/submissions/complete?cc=8334F312
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['block5.xlsx', 'block4.xlsx', 'block3.xlsx', 'block2.xlsx', 'block1.xlsx', 'chooseBlock.xlsx']
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 800]
  expName = mouse_choke
  logging level = debug
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Routines
  Routine trial
    PolygonComponent invis_startPos_e
      fillColor = grey
      lineColor = grey
      nVertices = 128
      saveStartStop = False
      shape = regular polygon...
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    CodeComponent trackMouse_e_reach
      Code Type = Auto->JS
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      Begin Routine:
        reachTimer.reset()
        reachTimer.add(0.7)
        stay = False
        rtRecorded = False
      Each Frame:
        if falseStart == True:
            outcome = "0 points\n\nYou moved before the center circle disappeared"
            continueRoutine = False
        elif invis_startPos_e.contains(mouse_e_reach) == False and rtRecorded == False:
            rtRecorded = True
            actionTime = rtTimer.getTime()
            thisExp.addData('actionTime', actionTime)
            thisExp.addData('reactionTime', actionTime-delayTime-0.25)

        if target_e_reach.contains(mouse_e_reach) == False:
            stay = False
            if reachTimer.getTime() >= 0:
                duration = rtTimer.getTime()
                thisExp.addData('duration', duration)
                thisExp.addData('entryTime', entryTime)
                thisExp.addData('lastEntry', lastEntry)
                inaccurate = True
                outcome = "0 points"
                mousex = mouse_e_reach.getPos()[0]
                mousey = mouse_e_reach.getPos()[1]
                continueRoutine = False
        elif target_e_reach.contains(mouse_e_reach) == True and stay == False:
            lastEntry = str(rtTimer.getTime())
            if not entryTime == "":
                entryTime += ","
            entryTime += lastEntry
            stay = True
            hitTarget = True
            winTimer.reset()
            winTimer.add(0.3)
        else:
            if winTimer.getTime() >= 0:
                duration = rtTimer.getTime()
                thisExp.addData('duration', duration)
                thisExp.addData('entryTime', entryTime)
                thisExp.addData('lastEntry', lastEntry)
                wingame = True
                outcome = "+" + str(targetPoints) + " points!"
                mousex = mouse_e_reach.getPos()[0]
                mousey = mouse_e_reach.getPos()[1]
                continueRoutine = False
      End Routine:
        thisExp.addData('delayTime', delayTime)
        thisExp.addData('targetsize', targetsize)
        if wingame:
            thisExp.addData('wingame', 1)
        else:
            thisExp.addData('wingame', 0)
        if inaccurate:
            thisExp.addData('inaccurate', 1)
        else:
            thisExp.addData('inaccurate', 0)
        if falseStart:
            thisExp.addData('falseStart', 1)
        else:
            thisExp.addData('falseStart', 0)
        if hitTarget:
            thisExp.addData('hitTarget', 1)
        else:
            thisExp.addData('hitTarget', 0)
        thisExp.addData('finalpos', str(mousex) + "," + str(mousey))
    MouseComponent mouse_e_reach
      forceEndRoutineOnPress = never
      saveMouseState = every frame
      startVal [time (s)] = 0.0
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    PolygonComponent target_e_reach
      fillColor [set every repeat] = $targetColor
      lineColor = grey
      nVertices = 128
      pos [set every repeat] = $targetPos
      shape = regular polygon...
      size [set every repeat] = $[targetsize, targetsize]
      startVal [time (s)] = 0
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    TextComponent targetPoints_e_reach
      color = black
      letterHeight [set every repeat] = targetsize * 3/5
      pos [set every repeat] = $targetPos
      startVal [time (s)] = 0.0
      text [set every repeat] = $targetPoints
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  Routine centerMouse
    TextComponent timeout_text_e
      color = red
      letterHeight = 0.06
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
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    CodeComponent timeout_check_e
      Code Type = Both
      Begin JS Routine:
        timeout_text_e.text = "";
        timeoutTimer.reset();
        timeoutTimer.add(60);
      Begin Routine:
        timeout_text_e.text = ""
        timeoutTimer.reset()
        timeoutTimer.add(60)
      Each Frame:
        if timeoutTimer.getTime() >= -30:
            timeout_text_e.text = 'Timeout in ' + str(int(-timeoutTimer.getTime())) + ' secs'

        if timeoutTimer.getTime() >= 0:
            core.quit()
      Each JS Frame:
        if ((timeoutTimer.getTime() >= (- 30))) {
            timeout_text_e.text = (("Timeout in " + Number.parseInt((- timeoutTimer.getTime())).toString()) + " secs");
        }
        if ((timeoutTimer.getTime() >= 0)) {
            psychoJS.quit();
        }
    PolygonComponent centercircle
      fillColor = white
      lineColor = grey
      nVertices = 128
      shape = regular polygon...
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    MouseComponent centermouse_e
      clickable = centercircle
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      startVal [time (s)] = 0.0
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    TextComponent centerInstr_e
      letterHeight = 0.1
      pos = (0, .3)
      startVal [time (s)] = 0.0
      text = Click the circle to begin
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  Routine outcomes
    CodeComponent endExp
      Code Type = Auto->JS
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      Begin Routine:
        msg = "This is the end of the experiment. "
        pointmsg = "You earned a total of " + str(totalpoints) + " points. Thank you for your participation!\n\nPress the space bar to exit"

        outcomemsg = msg + pointmsg
        thisExp.addData("totalpoints", totalpoints)
    TextComponent endOutcome_e
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $outcomemsg
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    KeyboardComponent endResp_e
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine startposition
    CodeComponent setVariables_e
      Code Type = Auto->JS
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      Begin Routine:
        #set target position and colors
        targetPos =(float(targetPosX),float(targetPosY))
        if targetPoints == 5:
            targetColor = fivecolor
        elif targetPoints == 10:
            targetColor = tencolor
        elif targetPoints == 15:
            targetColor = fifteencolor
        elif targetPoints == 20:
            targetColor = twentycolor
        elif targetPoints == 100:
            targetColor = jackpotcolor

        #reset variables
        showTarget=False
        wingame = False
        inaccurate = False
        falseStart = False
        hitTarget = False
        distanceFromTarget = 0
        distanceFromTargetX = 0
        distanceFromTargetY = 0
        distanceFromStart = 0
        entryTime = ""
        lastEntry = ""

        #timers
        delayTime = (randint(2,6) + 0.50)/10
        startPosTimer.reset()
        startPosTimer.add(0.25)
        rtTimer.reset()
        thisExp.addData('trialType', "experiment")
    CodeComponent showTarget_e
      Code Type = Auto->JS
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      Each Frame:
        if not startPos_e_wait.contains(mouse_e_wait):
            falseStart = True
            actionTime = rtTimer.getTime()
            thisExp.addData('actionTime', actionTime)
            thisExp.addData('reactionTime', actionTime-delayTime-0.25)
            thisExp.addData('duration', actionTime)
            continueRoutine = False
        elif showTarget == False and startPosTimer.getTime() >= 0:
            showTarget = True
            delayTimer.reset()
            delayTimer.add(delayTime)
        elif showTarget == True and delayTimer.getTime() >= 0:
            continueRoutine = False
    PolygonComponent startPos_e_wait
      fillColor [set every repeat] = $targetColor
      lineColor = grey
      nVertices = 128
      shape = regular polygon...
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent target_e_wait
      fillColor [set every repeat] = $targetColor
      lineColor = grey
      nVertices = 128
      pos [set every repeat] = $targetPos
      shape = regular polygon...
      size [set every repeat] = $[targetsize, targetsize]
      startVal [condition] = showTarget
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    MouseComponent mouse_e_wait
      forceEndRoutineOnPress = never
      saveMouseState = every frame
      startVal [time (s)] = 0.0
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    TextComponent targetPoints_e_wait
      color = black
      letterHeight [set every repeat] = targetsize * 3/5
      pos [set every repeat] = $targetPos
      startVal [condition] = $showTarget
      text [set every repeat] = $targetPoints
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    TextComponent spPoints_e_wait
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0
      text [set every repeat] = $targetPoints
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  Routine feedback
    CodeComponent countPoints_e
      Code Type = Auto->JS
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      Begin Routine:
        #Record earned points
        if wingame == True:
            blockpoints += targetPoints

        #if falseStart, don't show feedback
        if falseStart == True:
            tcolor = 'grey'
            mcolor = 'grey'
            textcolor = 'grey'
        else:
            tcolor = targetColor
            mcolor = 'black'
            textcolor = 'black'
    TextComponent outcome_e
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $outcome
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    PolygonComponent target_e_outcome
      fillColor [set every repeat] = $tcolor
      lineColor = grey
      nVertices = 128
      pos [set every repeat] = $targetPos
      saveStartStop = False
      shape = regular polygon...
      size [set every repeat] = $[targetsize, targetsize]
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
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    TextComponent targetPoints_e_reach_2
      color [set every repeat] = $textcolor
      letterHeight [set every repeat] = targetsize * 3/5
      pos [set every repeat] = $targetPos
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $targetPoints
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    PolygonComponent mousepos_e
      fillColor [set every repeat] = $mcolor
      lineColor = grey
      nVertices = 128
      pos [set every repeat] = (mousex, mousey)
      saveStartStop = False
      shape = regular polygon...
      size = (0.01, 0.01)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.0
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    CodeComponent distanceTarget_e
      Code Type = Auto->JS
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      Begin Routine:
        distanceFromTargetX = abs(targetPos[0]-mousex)
        distanceFromTargetY = abs(targetPos[1]-mousey)
        distanceFromTarget = sqrt(distanceFromTargetX**2+distanceFromTargetY**2) - targetsize/2

        thisExp.addData('distanceFromTarget', distanceFromTarget)
    CodeComponent distanceStart_e
      Code Type = Auto->JS
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      Begin Routine:
        distanceFromStart = sqrt(abs(mousex)**2+abs(mousey)**2) - 0.025

        thisExp.addData('distanceFromStart', distanceFromStart)
  Routine centerMousetraining
    TextComponent timeout_text_t
      color = red
      letterHeight = 0.06
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent timeout_check_t
      Code Type = Both
      Begin JS Routine:
        timeout_text_t.text = "";
        timeoutTimer.reset();
        timeoutTimer.add(60);
      Begin Routine:
        timeout_text_t.text = ""
        timeoutTimer.reset()
        timeoutTimer.add(60)
      Each Frame:
        if timeoutTimer.getTime() >= -30:
            timeout_text_t.text = 'Timeout in ' + str(int(-timeoutTimer.getTime())) + ' secs'

        if timeoutTimer.getTime() >= 0:
            core.quit()
      Each JS Frame:
        if ((timeoutTimer.getTime() >= (- 30))) {
            timeout_text_t.text = (("Timeout in " + Number.parseInt((- timeoutTimer.getTime())).toString()) + " secs");
        }
        if ((timeoutTimer.getTime() >= 0)) {
            psychoJS.quit();
        }
    PolygonComponent centercircle_t
      fillColor = white
      lineColor = grey
      nVertices = 128
      saveStartStop = False
      shape = regular polygon...
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    MouseComponent centermouse_t
      clickable = centercircle_t
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      startVal [time (s)] = 0.0
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    TextComponent centerinstr_t
      letterHeight = 0.1
      pos = (0, .3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Click the circle to begin
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    CodeComponent testtrialtextcode
      Code Type = Auto->JS
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      Begin Experiment:
        testtrialnum = 1
      Begin Routine:
        testtrialtext = str(testtrialnum) + "/100 trials"
      End Routine:
        testtrialnum += 1
    TextComponent testtrialtext_1
      letterHeight = 0.05
      pos = (0.6, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $testtrialtext
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  Routine startpositiontraining
    CodeComponent setVariables_t
      Code Type = Auto->JS
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      Begin Routine:
        #determine target position
        num = randint(1,7)
        if num == 1:
            targetPos = (-0.6279,0.16823)
        elif num == 2:
            targetPos = (-0.65,0)
        elif num == 3:
            targetPos = (-0.6279,-0.16823)
        elif num == 4:
            targetPos = (0.6279,0.16823)
        elif num == 5:
            targetPos = (0.65,0)
        else:
            targetPos = (0.6279,-0.16823)

        #reset game variables
        showTarget=False
        wingame = False
        inaccurate = False
        falseStart = False
        hitTarget = False
        distanceFromTarget = 0
        distanceFromTargetX = 0
        distanceFromTargetY = 0
        distanceFromStart = 0
        entryTime = ""
        lastEntry = ""

        #set timer for mouse in start position
        delayTime = (randint(2,6) + 0.50)/10
        startPosTimer.reset()
        startPosTimer.add(0.25)
        rtTimer.reset()
        thisExp.addData('trialType', "training")
    PolygonComponent startPos_t_wait
      fillColor = green
      lineColor = grey
      nVertices = 128
      saveStartStop = False
      shape = regular polygon...
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_t_wait
      forceEndRoutineOnPress = never
      saveMouseState = every frame
      startVal [time (s)] = 0.0
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    PolygonComponent target_t_wait
      fillColor = green
      lineColor = grey
      nVertices = 128
      pos [set every repeat] = $targetPos
      saveStartStop = False
      shape = regular polygon...
      size [set every repeat] = $[targetsize, targetsize]
      startVal [condition] = showTarget
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    CodeComponent showTarget_t
      Code Type = Auto->JS
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      Each Frame:
        if not startPos_t_wait.contains(mouse_t_wait):
            falseStart = True
            actionTime = rtTimer.getTime()
            thisExp.addData('actionTime', actionTime)
            thisExp.addData('reactionTime', actionTime-delayTime-0.25)
            thisExp.addData('duration', actionTime)
            continueRoutine = False

        elif showTarget == False and startPosTimer.getTime() >= 0:
            showTarget = True
            delayTimer.reset()
            delayTimer.add(delayTime)
        elif showTarget == True and delayTimer.getTime() >= 0:
            continueRoutine = False
    TextComponent testtrialtext_2
      letterHeight = 0.05
      pos = (0.6, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $testtrialtext
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  Routine trialtraining
    PolygonComponent invis_startPos_t
      fillColor = grey
      lineColor = grey
      nVertices = 128
      saveStartStop = False
      shape = regular polygon...
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_t_reach
      forceEndRoutineOnPress = never
      saveMouseState = every frame
      startVal [time (s)] = 0.0
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    CodeComponent trackMouse_t_reach
      Code Type = Auto->JS
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      Begin Routine:
        reachTimer.reset()
        reachTimer.add(0.7)
        stay = False
        rtRecorded = False
      Each Frame:
        if falseStart == True:
            outcome = "You moved before the center circle disappeared"
            continueRoutine = False
        elif invis_startPos_t.contains(mouse_t_reach) == False and rtRecorded == False:
            rtRecorded = True
            actionTime = rtTimer.getTime()
            thisExp.addData('actionTime', actionTime)
            thisExp.addData('reactionTime', actionTime-delayTime-0.25)

        if target_t_reach.contains(mouse_t_reach) == False:
            stay = False
            if reachTimer.getTime() >= 0:
                duration = rtTimer.getTime()
                thisExp.addData('duration', duration)
                thisExp.addData('entryTime', entryTime)
                thisExp.addData('lastEntry', lastEntry)
                inaccurate = True
                outcome = "Your reach was inaccurate"
                mousex = mouse_t_reach.getPos()[0]
                mousey = mouse_t_reach.getPos()[1]
                continueRoutine = False
        elif target_t_reach.contains(mouse_t_reach) == True and stay == False:
            lastEntry = str(rtTimer.getTime())
            if not entryTime == "":
                entryTime += ","
            entryTime += lastEntry
            stay = True
            hitTarget = True
            winTimer.reset()
            winTimer.add(0.3)
        else:
            if winTimer.getTime() >= 0:
                duration = rtTimer.getTime()
                thisExp.addData('duration', duration)
                thisExp.addData('entryTime', entryTime)
                thisExp.addData('lastEntry', lastEntry)
                wingame = True
                outcome = "Well done! "
                mousex = mouse_t_reach.getPos()[0]
                mousey = mouse_t_reach.getPos()[1]
                continueRoutine = False
    PolygonComponent target_t_reach
      fillColor = green
      lineColor = grey
      nVertices = 128
      pos [set every repeat] = $targetPos
      saveStartStop = False
      shape = regular polygon...
      size [set every repeat] = $[targetsize, targetsize]
      startVal [time (s)] = 0
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    TextComponent testtrialtext_3
      letterHeight = 0.05
      pos = (0.6, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $testtrialtext
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  Routine feedbacktraining
    CodeComponent changeSize_t
      Code Type = Auto->JS
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      Begin Routine:
        if falseStart == True:
            tcolor = 'grey'
            mcolor = 'grey'
        else:
            tcolor = 'green'
            mcolor = 'black'
      End Routine:
        if wingame:
            wincount = wincount + 1
        elif inaccurate:
            if targetsize <= 0.19:
                targetsize = targetsize + 0.01

        if wincount == 2:
            if targetsize >= 0.03:
                targetsize = targetsize - 0.01
            wincount = 0

        thisExp.addData('delayTime', delayTime)
        thisExp.addData('targetsize', targetsize)
        if wingame:
            thisExp.addData('wingame', 1)
        else:
            thisExp.addData('wingame', 0)
        if inaccurate:
            thisExp.addData('inaccurate', 1)
        else:
            thisExp.addData('inaccurate', 0)
        if falseStart:
            thisExp.addData('falseStart', 1)
        else:
            thisExp.addData('falseStart', 0)
        if hitTarget:
            thisExp.addData('hitTarget', 1)
        else:
            thisExp.addData('hitTarget', 0)
        thisExp.addData('finalpos', str(mousex) + "," + str(mousey))
    TextComponent outcome_t
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $outcome
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    PolygonComponent target_t_outcome
      fillColor [set every repeat] = $tcolor
      lineColor = grey
      nVertices = 128
      pos [set every repeat] = $targetPos
      saveStartStop = False
      shape = regular polygon...
      size [set every repeat] = $[targetsize, targetsize]
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
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    PolygonComponent mousepos_t
      fillColor [set every repeat] = $mcolor
      lineColor = grey
      nVertices = 128
      pos [set every repeat] = (mousex, mousey)
      saveStartStop = False
      shape = regular polygon...
      size = (0.01, 0.01)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.0
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    TextComponent testtrialtext_4
      letterHeight = 0.05
      pos = (0.6, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      text [set every repeat] = $testtrialtext
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    CodeComponent distanceTarget_t
      Code Type = Auto->JS
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      Begin Routine:
        thisExp.addData('distanceFromTarget', distanceFromTarget)

        distanceFromTargetX = abs(targetPos[0]-mousex)
        distanceFromTargetY = abs(targetPos[1]-mousey)
        distanceFromTarget = sqrt(distanceFromTargetX**2+distanceFromTargetY**2) - targetsize/2

        thisExp.addData('distanceFromTarget', distanceFromTarget)
    CodeComponent distanceStart_t
      Code Type = Auto->JS
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      Begin Routine:
        distanceFromStart = sqrt(abs(mousex)**2+abs(mousey)**2) - 0.025

        thisExp.addData('distanceFromStart', distanceFromStart)
  Routine EndTraining
    KeyboardComponent endResp_t
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent endInstr_t
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Great job!

        We will now begin the reward section of the experiment where you can earn cash bonuses.  On each trial, the targets will be worth a different number of points that you can earn by successfully completing that trial.

        Press the space bar to continue
  Routine instr_colorpoints
    TextComponent startInstr_e
      letterHeight = 0.05
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        The point value will be displayed both in the center circle at the start of the trial and in the target itself.  The point value on each trial can be either 5, 10, 15, 20, or 100.
        Each reward value is associated with a certain color.

        Below are examples of the colors you will
        see.
        Press the space bar to continue
    KeyboardComponent startResp_e
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    PolygonComponent polygon1
      fillColor = $fivecolor
      lineColor = grey
      nVertices = 128
      pos = (-0.3, -0.3)
      saveStartStop = False
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent polygon2
      fillColor = $tencolor
      lineColor = grey
      nVertices = 128
      pos = (-0.15, -0.3)
      saveStartStop = False
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent polygon3
      fillColor = $fifteencolor
      lineColor = grey
      nVertices = 128
      pos = (0, -0.3)
      saveStartStop = False
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent polygon4
      fillColor = $twentycolor
      lineColor = grey
      nVertices = 128
      pos = (0.15, -0.3)
      saveStartStop = False
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent polygon5
      fillColor = $jackpotcolor
      lineColor = grey
      nVertices = 128
      pos = (0.3, -0.3)
      saveStartStop = False
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent polygon1Points
      color = black
      letterHeight = 0.06
      pos = (-0.3, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 5
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    TextComponent polygon2Points
      color = black
      letterHeight = 0.06
      pos = (-0.15, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 10
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    TextComponent polygon3Points
      color = black
      letterHeight = 0.06
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 15
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    TextComponent polygon4Points
      color = black
      letterHeight = 0.06
      pos = (0.15, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 20
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    TextComponent polygon5Points
      color = black
      letterHeight = 0.06
      pos = (0.3, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 100
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  Routine instr2
    PolygonComponent centercircle_instr
      fillColor = $[1,1,1]
      lineColor = grey
      nVertices = 128
      saveStartStop = False
      shape = regular polygon...
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_instr_2
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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    TextComponent instr_2
      letterHeight = 0.05
      pos = (0, 0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Every trial will begin with a white circle at the center of the screen. After you click this circle, you will see a color change. After a short delay, a colored target circle will appear either to the left or to the right. 
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    TextComponent spacebarinstr
      letterHeight = 0.05
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press the space bar to continue
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  Routine instr3
    PolygonComponent centercircle_instr2
      fillColor = green
      lineColor = grey
      nVertices = 128
      saveStartStop = False
      shape = regular polygon...
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    PolygonComponent targetcircleinstr
      fillColor = green
      lineColor = grey
      nVertices = 128
      pos = (-0.65, 0)
      saveStartStop = False
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent instr_3
      contrast = 0.1
      letterHeight = 0.05
      pos = (0, 0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = As soon as the center circle disappears, you should move your cursor to the target circle.  There will be a time limit, so you will need to move quickly. 
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    KeyboardComponent key_resp_instr_3
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
      store = nothing
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    TextComponent spacebarinstr_2
      letterHeight = 0.05
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press the space bar to continue
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  Routine break_warning
    KeyboardComponent key_resp_break_warning
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_break_warning
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        The experiment contains 5 blocks with 120 trials each.

        In-between blocks you may take a short break (2 minutes). If you take long breaks during the experiment, the experiment will terminate, and your entry will be rejected.

        Press the space bar when you are ready to begin
  Routine blockbreak
    TextComponent blockbreaktext
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent timeout_text_break
      color = red
      letterHeight = 0.06
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent blockbreakcode
      Code Type = Both
      Begin Experiment:
        index = 0
        blockpoints = 0
      Begin JS Experiment:
        index = 0;
        blockpoints = 0;
      Begin JS Routine:
        index += 1;
        totalpoints += blockpoints;
        blockbreaktext.text = (((((("Block " + index.toString()) + " complete.\n") + "You earned ") + blockpoints.toString()) + " points this block.\nYou can take a 2-minute break now if you'd like.\n\n") + "When you are ready, press the space bar to proceed");
        timeoutTimer.reset();
        timeoutTimer.add(120);
      Begin Routine:
        index += 1
        totalpoints += blockpoints
        blockbreaktext.text = "Block " + str(index) + " complete.\n" + "You earned " + str(blockpoints) + " points this block.\nYou can take a 2-minute break now if you'd like.\n\n" + "When you are ready, press the space bar to proceed"

        timeoutTimer.reset()
        timeoutTimer.add(120)
      Each Frame:
        if timeoutTimer.getTime() >= -120:
            timeout_text_break.text = 'Timeout in ' + str(int(-timeoutTimer.getTime())) + ' secs'

        if timeoutTimer.getTime() >= 0:
            core.quit()
      Each JS Frame:
        if ((timeoutTimer.getTime() >= (-120))) {
            timeout_text_break.text = (("Timeout in " + Number.parseInt((- timeoutTimer.getTime())).toString()) + " secs");
        }
        if ((timeoutTimer.getTime() >= 0)) {
            psychoJS.quit();
        }
      End JS Routine:
        blockpoints = 0;
        timeout_text_break.text = "";
      End Routine:
        blockpoints = 0
        timeout_text_break.text = ""
    KeyboardComponent key_resp_blockbreak
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instr4
    PolygonComponent targetcircleinstr_2
      fillColor = green
      lineColor = grey
      nVertices = 128
      pos = (-0.65, 0)
      saveStartStop = False
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent instr_4
      contrast = 0.1
      letterHeight = 0.05
      pos = (0, 0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = After you reach the target circle, you need to hold the cursor there until the end of the trial. If the cursor moves out of the circle before the trial ends, that will count as a 'miss'.
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    KeyboardComponent key_resp_instr_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = nothing
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    TextComponent spacebarinstr_3
      letterHeight = 0.05
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press the space bar to continue
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  Routine instr6
    KeyboardComponent key_resp_instr_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent instr_6
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        We will now begin with the training section that will prepare you for the experiment.

        Please stay focused during the process. If you spend too long on the center circle screen, the experiment will terminate, and your entry will be rejected.

        Press the space bar to continue
  Routine instr5
    PolygonComponent targetcircleinstr_3
      fillColor = green
      lineColor = grey
      nVertices = 128
      pos = (-0.65, 0)
      saveStartStop = False
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent instr_5
      contrast = 0.1
      letterHeight = 0.05
      pos = (0, 0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = At the end of each trial, you will receive feedback on your performance, including a black dot representing your mouse position at the end of the trial. 
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    KeyboardComponent key_resp_instr_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = nothing
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    TextComponent spacebarinstr_4
      letterHeight = 0.05
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press the space bar to continue
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    PolygonComponent dot_instr
      fillColor = black
      lineColor = grey
      nVertices = 128
      pos = (-0.62, 0)
      saveStartStop = False
      shape = regular polygon...
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
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  Routine instr1
    CodeComponent initialize
      Code Type = Both
      Begin Experiment:
        targetColor = "white"
        outcome = " "
        wingame = False
        inaccurate = False
        falseStart = False

        startPosTimer = core.Clock()
        delayTimer = core.Clock()
        reachTimer = core.Clock()
        winTimer = core.Clock()
        timeoutTimer = core.Clock()
        rtTimer = core.Clock()

        distanceFromTarget = 0
        distanceFromTargetX = 0
        distanceFromTargetY = 0
        distanceFromStart = 0

        targetsize = 0.1
        wincount = 0
        totalpoints = 0
        mousex = 0
        mousey = 0
      Begin JS Experiment:
        thisExp = psychoJS.experiment;

        randint = function(min, maxplusone) {
          return Math.floor(Math.random() * (maxplusone - min) ) + min;
        }

        asarray=function(something) {
          return something;
        }

        targetColor = "white";
        outcome = " ";
        wingame = false;
        inaccurate = false;
        falseStart = false;

        startPosTimer = new util.Clock();
        delayTimer = new util.Clock();
        reachTimer = new util.Clock();
        winTimer = new util.Clock();
        timeoutTimer = new util.Clock();
        rtTimer = new util.Clock();

        distanceFromTarget = 0;
        distanceFromTargetX = 0;
        distanceFromTargetY = 0;
        distanceFromStart = 0;

        targetsize = 0.1;
        wincount = 0;
        totalpoints = 0;
        mousex = 0;
        mousey = 0;
    CodeComponent colormapping
      Code Type = Auto->JS
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      Begin Experiment:
        colorint=randint(1,6)
        if colorint == 1:
            jackpotcolor = "yellow"
            fifteencolor = "white"
            fivecolor = "red"
            twentycolor = "dodgerblue"
            tencolor = "orange"
        elif colorint == 2:
            twentycolor = "yellow"
            tencolor = "white"
            jackpotcolor = "red"
            fifteencolor = "dodgerblue"
            fivecolor = "orange"
        elif colorint == 3:
            fifteencolor = "yellow"
            fivecolor = "white"
            twentycolor = "red"
            tencolor = "dodgerblue"
            jackpotcolor = "orange"
        elif colorint == 4:
            tencolor = "yellow"
            jackpotcolor = "white"
            fifteencolor = "red"
            fivecolor = "dodgerblue"
            twentycolor = "orange"
        else:
            fivecolor = "yellow"
            twentycolor = "white"
            tencolor = "red"
            jackpotcolor = "dodgerblue"
            fifteencolor = "orange"

        thisExp.addData('colormapping', fivecolor + "," + tencolor + ","
        + fifteencolor + "," + twentycolor + "," + jackpotcolor)
    TextComponent instr_1
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        In this experiment, you will be making reaching movements with your mouse/trackpad to try to earn cash bonuses.  You'll first spend 5 minutes training on the task and then you will do 5 blocks of 120 trials trying to earn rewards.


        Press the space bar to continue
    KeyboardComponent key_resp_instr_1
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine question
    TextComponent question_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Which of the following are you using to do the experiment?
        Choose one or the other: far left - mouse, far right - trackpad
        Please use your choice throughout the experiment







        Press the space bar to continue
    SliderComponent slider
      color = White
      fillColor = Dodgerblue
      forceEndRoutine = False
      granularity = 0
      labels = ['Mouse','Trackpad']
      letterHeight = 0.05
      saveStartStop = False
      size = (0.8, 0.1)
      startVal [time (s)] = 0.0
      storeHistory = True
      storeRatingTime = False
      styleTweaks = ('triangleMarker',)
      styles = rating
      ticks = (1,2)
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    KeyboardComponent question_key_resp
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine instr1
  Routine instr2
  Routine instr3
  Routine instr4
  Routine instr5
  Routine question
  Routine instr6
  LoopInitiator training loopType="TrialHandler"
    loopType = sequential
    nReps = 100
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    Routine centerMousetraining
    Routine startpositiontraining
    Routine trialtraining
    Routine feedbacktraining
  LoopTerminator training
  Routine EndTraining
  Routine instr_colorpoints
  Routine break_warning
  LoopInitiator blocks loopType="TrialHandler"
    conditionsFile = chooseBlock.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'condsFile': 'block1.xlsx'},
      {'condsFile': 'block2.xlsx'},
      {'condsFile': 'block3.xlsx'},
      {'condsFile': 'block4.xlsx'},
      {'condsFile': 'block5.xlsx'}]
    LoopInitiator experiment loopType="TrialHandler"
      conditionsFile = $condsFile
      loopType = sequential
      nReps = 1
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      Routine centerMouse
      Routine startposition
      Routine trial
      Routine feedback
    LoopTerminator experiment
    Routine blockbreak
  LoopTerminator blocks
  Routine outcomes
